PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Cued GoNogo Task
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Routines
  Routine TaskIntro
    TextComponent fixation
      color = black
      font = NanumSquare
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 안녕하세요. 검사에 참여해주셔서 감사합니다. 스페이스바를 누르면 검사가 시작됩니다.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    PolygonComponent Cue
      fillColor = white
      lineColor = black
      lineWidth = 1.5
      shape = rectangle
      size [set every repeat] = $[Stim_Width, Stim_Height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = CueTime
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    CodeComponent ColorSelection
      Code Type = Auto->JS
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      Begin Routine:
        if StimType == 'Go':
            StimColor = 'green'
        elif StimType == 'NoGo':
            StimColor = 'blue'
    PolygonComponent GoNogo_Stim
      fillColor [set every repeat] = $StimColor
      lineColor = black
      lineWidth = 1.5
      shape = rectangle
      size [set every repeat] = $[Stim_Width, Stim_Height]
      startVal [time (s)] = CueTime+0.2
      stopVal [duration (s)] = 1
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    KeyboardComponent Key_Resp
      allowedKeys = 'space'
      correctAns = $CRESP
      forceEndRoutine = True
      startVal [time (s)] = CueTime+0.2
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine TaskEnd
  Routine Fixation
    TextComponent FixationPhase
      color = black
      font = NanumSquare
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      text = +
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    TextComponent Blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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  Routine Feedback
    CodeComponent feedback_sentence
      Code Type = Auto->JS
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      Begin Routine:
        if StimType == 'Go': # go cue 제시 조건에서
            if Key_Resp.corr == 1: # 정답을 맞췄으면,
                fb_color = 'Maroon'
                fb_msg = "정확합니다"+"\n"+"반응속도: "+str(int(Key_Resp.rt*1000))+"ms"
            else: # 틀린 경우에
                fb_color = 'MediumBlue'
                fb_msg = "틀렸습니다"
        elif StimType == 'NoGo': # Nogo cue 제시 조건에서
            if Key_Resp.corr == 1: # 정답을 맞췄으면,
                fb_color = 'Maroon'
                fb_msg = "정확합니다"
            else: # 틀린 경우에
                fb_color = 'MediumBlue'
                fb_msg = "틀렸습니다. 버튼을 누르면 안 됩니다."
    TextComponent Feedback_Present
      color [set every repeat] = $fb_color
      font = NanumSquare
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $fb_msg
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Flow
  Routine TaskIntro
  LoopInitiator Blocks loopType="TrialHandler"
    conditionsFile = BlockList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Block': 'CondGo.xlsx'},
      {'Block': 'CondNoGo.xlsx'}]
    LoopInitiator Trials loopType="TrialHandler"
      conditionsFile = $Block
      loopType = random
      nReps = 1
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      Routine Fixation
      Routine Trial
      Routine Feedback
    LoopTerminator Trials
  LoopTerminator Blocks
  Routine TaskEnd
