PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = RM_new
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Routines
  Routine feedback
    PolygonComponent fb_circle
      fillColor = red
      lineColor = black
      pos [set every repeat] = $[circle_pos, -0.15]
      shape = triangle
      size = (0.05, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent fb_line
      fillColor = black
      lineColor = black
      lineWidth = 8
      shape = line
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent fb_circle_text
      color = black
      font = NanumSquare
      letterHeight = 0.05
      pos [set every repeat] = $[circle_pos, -0.25]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Answer
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    PolygonComponent fb_resp_line
      fillColor = blue
      lineColor = black
      pos [set every repeat] = $[resp_mouse.getPos()[0], -0.15]
      shape = triangle
      size = (0.05, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent fb_resp_text
      color = black
      font = NanumSquare
      letterHeight = 0.05
      pos [set every repeat] = $[resp_mouse.getPos()[0], -0.25]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Response 
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        resp_diff = resp_mouse.getPos()[0]-circle_pos

        if resp_diff > 0:
            msg = "원의 위치를 더 오버해서 봤습니다."
        elif resp_diff < 0:
            msg = "원의 위치를 더 적게 봤습니다."
    TextComponent fb_msg
      color = black
      font = NanumSquare
      letterHeight = 0.05
      pos = (0, +0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    VariableComponent resp_diff_value
      startRoutineValue = resp_diff
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  Routine stim
    CodeComponent circle_pos_fun
      Code Type = Auto->JS
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      Begin Routine:
        circle_pos = -0.2
      Each Frame:
        # circle_pos = circle_pos+0.005
        circle_pos += 0.01
        # circle_pos -= 0.005
    GratingComponent stim_circle
      color = black
      mask = circle
      pos [set every frame] = $[circle_pos, 0]
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      tex = None
      texture resolution = 256
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  Routine response
    TextComponent resp_inst
      color = black
      font = NanumSquare
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = 원이 사라진 위치를 마우스로 클릭해주세요.
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    PolygonComponent resp_line
      fillColor = black
      lineColor = black
      lineWidth = 8
      shape = line
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent resp_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine stim
    Routine response
    Routine feedback
  LoopTerminator trials
