PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = new_iowaGambling_prac
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Routines
  Routine Intro
    TextComponent Instruction
      color = black
      font = NanumSquare
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 검사가 시작하게 되면 4개의 카드 덱 중 하나를 선택해주세요. 각 덱을 선택할때마다 일정한 금전적 이득과 손실이 발생할 수 있습니다. 이득을 최대화하는 카드 덱을 선택해주세요. 검사를 시작하려면 스페이스바를 눌러주세요.
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    KeyboardComponent Intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    TextComponent Trial_Instruction
      color = black
      font = NanumSquare
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = 카드를 선택해주세요.
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    ImageComponent DeckA
      image = images/Card.jpg
      pos = [-0.5, 0]
      size = [0.25, 0.25*1.45]
      startVal [time (s)] = 0.0
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    ImageComponent DeckB
      image = images/Card.jpg
      pos = [-0.17, 0]
      size = [0.25, 0.25*1.45]
      startVal [time (s)] = 0.0
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    ImageComponent DeckC
      image = images/Card.jpg
      pos = [0.16, 0]
      size = [0.25, 0.25*1.45]
      startVal [time (s)] = 0.0
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    ImageComponent DeckD
      image = images/Card.jpg
      pos = [0.5, 0]
      size = [0.25, 0.25*1.45]
      startVal [time (s)] = 0.0
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    PolygonComponent border
      lineColor = blue
      opacity [set every repeat] = 0.7
      pos [set every frame] = $[border_loc, 0]
      shape = rectangle
      size = [0.26, 0.26*1.45]
      startVal [time (s)] = 0.0
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    MouseComponent Trial_click
      clickable = DeckA, DeckB, DeckC, DeckD,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent borderChange
      Code Type = Auto->JS
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      Begin Experiment:
        border_loc = 0
      Each Frame:
        if DeckA.contains(Trial_click):
            border_loc = -0.5
        elif DeckB.contains(Trial_click):
            border_loc = -0.17
        elif DeckC.contains(Trial_click):
            border_loc = 0.16
        elif DeckD.contains(Trial_click):
            border_loc = 0.5
    TextComponent totMoney
      color = black
      font = NanumSquare
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_money
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    TextComponent Nchoice
      color = black
      letterHeight = 0.05
      pos = (0.5, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_choice
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  Routine TaskEnd
  Routine Feedback
    CodeComponent card_setting
      Code Type = Both
      Before Experiment:
        import random
      Before JS Experiment:
        function sum(arr) {
           var num = 0;
           for (var i = 0; i < arr.length; i++) {
               num += (typeof arr[i] == 'number') ? arr[i] : 0;
           }
           return num;
        };
      Begin Experiment:
        # deck list
        # win or loss?
        deckA_list = [1,1,1,1,1,0,0,0,0,0]
        deckB_list = [1,0,0,0,0,0,0,0,0,0]
        deckC_list = [1,1,1,1,1,0,0,0,0,0]
        deckD_list = [1,0,0,0,0,0,0,0,0,0]
        #deckA_list = [1]*deck_list[0][2]+[0]*(ncard_per_deck-deck_list[0][2])
        #deckB_list = [1]*deck_list[1][2]+[0]*(ncard_per_deck-deck_list[1][2])
        #deckC_list = [1]*deck_list[2][2]+[0]*(ncard_per_deck-deck_list[2][2])
        #deckD_list = [1]*deck_list[3][2]+[0]*(ncard_per_deck-deck_list[3][2])

        # gain per card, loss, number of loss cards in a deck(10 cards)
        deckA_prop = [100, -250, deckA_list]
        deckB_prop = [100, -1250, deckB_list]
        deckC_prop = [50, -50, deckC_list]
        deckD_prop = [50, -250, deckD_list]

        # define deck_list variable
        deck_list = [deckA_prop, deckB_prop, deckC_prop, deckD_prop]
        random.shuffle(deck_list)

        # money setting
        money = 2000
        net_gain = 0
        gain = 0
        loss = 0

        # choice index
        deck_choiceN = [0, 0, 0, 0]

        # trial_setting
        trial_tot = 0
        msg_choice = " "
        msg_money = " "
      Begin JS Experiment:
        deckA_list = [1, 1, 1, 1, 1, 0, 0, 0, 0, 0];
        deckB_list = [1, 0, 0, 0, 0, 0, 0, 0, 0, 0];
        deckC_list = [1, 1, 1, 1, 1, 0, 0, 0, 0, 0];
        deckD_list = [1, 0, 0, 0, 0, 0, 0, 0, 0, 0];
        deckA_prop = [100, (- 250), deckA_list];
        deckB_prop = [100, (- 1250), deckB_list];
        deckC_prop = [50, (- 50), deckC_list];
        deckD_prop = [50, (- 250), deckD_list];
        deck_list = [deckA_prop, deckB_prop, deckC_prop, deckD_prop];
        util.shuffle(deck_list);
        money = 2000;
        net_gain = 0;
        gain = 0;
        loss = 0;
        deck_choiceN = [0, 0, 0, 0];
        trial_tot = 0;
        msg_choice = " ";
        msg_money = " ";
      Begin JS Routine:
        if ((Trial_click.clicked_name[0] === "DeckA")) {
            choice_idx = 0;
        } else {
            if ((Trial_click.clicked_name[0] === "DeckB")) {
                choice_idx = 1;
            } else {
                if ((Trial_click.clicked_name[0] === "DeckC")) {
                    choice_idx = 2;
                } else {
                    if ((Trial_click.clicked_name[0] === "DeckD")) {
                        choice_idx = 3;
                    }
                }
            }
        }
        deck_choiceN[choice_idx] += 1;
        if (((deck_choiceN[choice_idx] % 10) === 1)) {
            card_list = deck_list[choice_idx][2];
            util.shuffle(card_list);
        }
        gain = deck_list[choice_idx][0];
        loss = (card_list[((deck_choiceN[choice_idx] - 1) % 10)] * deck_list[choice_idx][1]);
        net_gain = (gain + loss);
        money += net_gain;
        trial_tot = sum(deck_choiceN);
        msg_money = ((((gain.toString() + "\n") + loss.toString()) + "\n") + money.toString());
        msg_choice = ((((((((deck_choiceN[0].toString() + ",") + deck_choiceN[1].toString()) + ",") + deck_choiceN[2].toString()) + ",") + deck_choiceN[3].toString()) + "\n") + trial_tot.toString());
      Begin Routine:
        # gain money per card
        if Trial_click.clicked_name[0] == 'DeckA':
            choice_idx = 0
        elif Trial_click.clicked_name[0] == 'DeckB':
            choice_idx = 1
        elif Trial_click.clicked_name[0] == 'DeckC':
            choice_idx = 2
        elif Trial_click.clicked_name[0] == 'DeckD':
            choice_idx = 3

        # increase deck choiceN
        deck_choiceN[choice_idx] += 1

        # shuffling result of deck choice
        if deck_choiceN[choice_idx] %10 == 1:
            card_list = deck_list[choice_idx][2]
            random.shuffle(card_list)

        # gain
        gain = deck_list[choice_idx][0]

        # loss
        loss = card_list[(deck_choiceN[choice_idx]-1) % 10]*deck_list[choice_idx][1]

        # calculate net gain of "this" trial
        net_gain = gain+loss

        # calculate money
        money += net_gain

        # calculate number of card choices
        trial_tot = sum(deck_choiceN)

        # summary
        msg_money = str(gain)+'\n'+str(loss)+'\n'+str(money)
        msg_choice = str(deck_choiceN[0])+','+str(deck_choiceN[1])+','+str(deck_choiceN[2])+','+str(deck_choiceN[3])+'\n'+str(trial_tot)
    VariableComponent gain_result
      startRoutineValue = net_gain
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    VariableComponent remained_money
      startRoutineValue = money
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine Trial
    Routine Feedback
  LoopTerminator trials
  Routine TaskEnd
