PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = SteelBlue
  expName = ReactionTime
  logging level = debug
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Routines
  Routine Introduction
    TextComponent stim_inst
      font = NanumSquare
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        빨간색 사각형이 초록색으로 바뀌었을 때, 최대한 빠르게 버튼을 눌러주세요.

        마우스를 클릭하면 검사가 시작됩니다.
    MouseComponent stim_resp
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Cue
    CodeComponent stim_code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Routine:
        time_change = random.randint(101,500)/100

        stim_color = 'DarkRed'
        stim_msg = '사각형 색생이 초록색으로 바뀔 때까지 기다려주세요.'


        timer = core.Clock()
      Each Frame:
        if timer.getTime() > time_change:
            stim_color = 'MediumSeaGreen'
            stim_msg = '마우스를 클릭해 주세요!'
    PolygonComponent stim_cue
      fillColor [set every frame] = $stim_color
      lineColor [set every repeat] = $stim_color
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent stim_message
      font = NanumSquare
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every frame] = $stim_msg
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    MouseComponent stim_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = time_change
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  Routine Feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        rt_recorded = []
        rt_sum = 0
      Begin Routine:
        mouse_rt = stim_mouse.time[-1]*1000
        rt_recorded.append(round(mouse_rt, 2))
        rt_sum += round(mouse_rt, 2)

        feedback_msg = str(round(mouse_rt, 2))+" ms"+"\n"+"클릭하면 다음 시행으로 넘어갑니다."
    TextComponent feedback_message
      font = NanumSquare
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    MouseComponent feedback_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine TaskEnd
    CodeComponent calc_meanRT
      Code Type = Auto->JS
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      Begin Routine:
        meanRT = rt_sum/len(rt_recorded)
    TextComponent TaskEnd_message
      font = NanumSquare
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $"평균 반응 속도: "+"\n"+str(meanRT)+"ms"
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    MouseComponent TaskEnd_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine Cue
    Routine Feedback
  LoopTerminator trials
  Routine TaskEnd
