PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = MOT task
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Routines
  Routine trial
    CodeComponent code
      Code Type = Both
      Before Experiment:
        import random
      Begin Experiment:
        # get the Width and Height
        [screenWidth, screenHeight] = win.size
        # FHD: 1920 x 1080
        # Mac: 2560 x 1440

        # get the ratio of width and height
        # FHD = 약 1.78
        # mac = 1.6
        circle_size = 0.1
        widthRatio = screenWidth/screenHeight
        widthRange = (widthRatio-circle_size)/2
        heightRange = (1-circle_size)/2
        citcle_spd = frameDur*0.5
      Begin JS Experiment:
        screenWidth = psychoJS.window.size[0];
        screenHeight = psychoJS.window.size[1];

        circle_size = 0.1;
        widthRatio = (screenWidth / screenHeight);
        widthRange = ((widthRatio - circle_size) / 2);
        heightRange = ((1 - circle_size) / 2);
        citcle_spd = (frameDur * 0.5);
      Begin JS Routine:
        base_angle = deg2rad(0);
        circle_x = 0;
        circle_y = 0;
      Begin Routine:
        base_angle = deg2rad(0)

        circle_x = 0
        circle_y = 0
      Each Frame:
        if abs(circle_x) >= widthRange or abs(circle_y) >= heightRange: # 모니터 가로 경계(왼쪽, 오른쪽)에 부딪히면
            base_angle += 180

        circle_x+=cos(base_angle)*citcle_spd
        circle_y+=sin(base_angle)*citcle_spd
      Each JS Frame:
        if (((Math.abs(circle_x) >= widthRange) || (Math.abs(circle_y) >= heightRange))) {
            base_angle += 180;
        }
        circle_x += (Math.cos(base_angle) * citcle_spd);
        circle_y += (Math.sin(base_angle) * citcle_spd);
    PolygonComponent stim_circle
      fillColor = black
      lineColor = black
      nVertices = 256
      pos [set every frame] = $[circle_x, circle_y]
      saveStartStop = False
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(screenWidth)+"\n"+str(screenHeight)
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  Routine task_start
    CodeComponent importFunc
      Code Type = JS
      Before JS Experiment:
        function deg2rad(degree)
        {
          var pi = Math.PI;
          return degree * (pi/180);
        }
  Routine test
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = “안녕하세요”
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Flow
  Routine task_start
  Routine trial
