PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = subject-customized exp
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Routines
  Routine trial
    CodeComponent img_assign_py
      Code Type = Py
      Before Experiment:
        # read excel

        import pandas as pd
        imgList = pd.read_excel('SubjectList.xlsx')
      Begin Routine:
        try:
            img = imgList.loc[imgList['Subj'] == expInfo['participant'], 'ImgIdx'].values[0]
        except:
            img = 'image/etc.jpg'
    ImageComponent image
      image [set every repeat] = $img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine trial
