PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = BreakTime
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        task_time = randint(100, 300)/100

        # set timer
        if trials.thisN == 0:
            timer = core.Clock() # core.CountdownTimer(10) 이런 식으로도 사용 가능
    TextComponent trial_stim
      color = black
      font = NanumSquare
      letterHeight = 0.1
      startVal [time (s)] = task_time
      text = +
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    TextComponent Timer_text
      color = black
      font = NanumSquare
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $round(timer.getTime(),2)
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    KeyboardComponent trial_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
    CodeComponent rest_code
      Code Type = Auto->JS
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      Begin Routine:
        if timer.getTime() < 10:
            continueRoutine  = False
        else:
            continueRoutine  = True
      End Routine:
        if timer.getTime() > 10:
            timer.reset()
    TextComponent rest_text
      color = black
      font = NanumSquare
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        잠시 과제를 쉬겠습니다.
        다음 시행을 진행하려면 스페이스바를 눌러주세요.
    KeyboardComponent rest_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ITI
    TextComponent ITI_text
      color = red
      font = NanumSquare
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine trial
    Routine rest
    Routine ITI
  LoopTerminator trials
